PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = ER_paradigm
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Routines
  Routine trial
    TextComponent Instr_ActiveViewing
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        ANSCHAUEN!

        In diesem Block werden Sie eine Reihe von Bildern sehen. Diese sollen Sie aufmerksam ansehen. Bitte reagieren Sie natürlich auf die Bildinhalte ohne aufkommende Emotionen zu verändern!

        Zum Starten des Experiments bitte Leertaste drücken."
Flow
  Routine trial
